# Generated by Configurator on Mon Nov 22 11:06:25 CST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM7,SerialManager,COM7
Device,TIScope,NikonTI,TIScope
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,pE4000,pE4000,pE4000
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath

# Pre-init settings for devices
Property,pE4000,Port,COM6

# Pre-init settings for COM ports
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1

# Hub (parent) references
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Shutter,pE4000
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# TIFilterBlock1
Label,TIFilterBlock1,5,6-Quadr
Label,TIFilterBlock1,4,5-ET-EY
Label,TIFilterBlock1,3,4-594-S
Label,TIFilterBlock1,2,3-532-S
Label,TIFilterBlock1,1,2-403/5
Label,TIFilterBlock1,0,1-NanoO
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: PFS
# Preset: Initial
ConfigGroup,PFS,Initial,TIPFSStatus,State,Off
ConfigGroup,PFS,Initial,TIPFSOffset,Position,0.0000


# Group: TiE_LightPath
# Preset: initial
ConfigGroup,TiE_LightPath,initial,TIFilterBlock1,Label,6-Quadr
ConfigGroup,TiE_LightPath,initial,TIFilterBlock1,State,5
ConfigGroup,TiE_LightPath,initial,TILightPath,Label,3-Right100


# Group: pE4000
# Preset: initial
ConfigGroup,pE4000,initial,pE4000,ChannelA,405
ConfigGroup,pE4000,initial,pE4000,ChannelB,470
ConfigGroup,pE4000,initial,pE4000,ChannelC,525
ConfigGroup,pE4000,initial,pE4000,ChannelD,635
ConfigGroup,pE4000,initial,pE4000,IntensityA,0
ConfigGroup,pE4000,initial,pE4000,IntensityB,5
ConfigGroup,pE4000,initial,pE4000,IntensityC,0
ConfigGroup,pE4000,initial,pE4000,IntensityD,0
ConfigGroup,pE4000,initial,pE4000,SelectionA,0
ConfigGroup,pE4000,initial,pE4000,SelectionB,1
ConfigGroup,pE4000,initial,pE4000,SelectionC,0
ConfigGroup,pE4000,initial,pE4000,SelectionD,0
ConfigGroup,pE4000,initial,pE4000,Global State,0


# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

