# Generated by Configurator on Wed Nov 25 13:53:29 CST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,TIScope,NikonTI,TIScope
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,Andor,Andor,Andor
Device,TIDiaLamp,NikonTI,TIDiaLamp

# Pre-init settings for devices
Property,Andor,Camera,| iXon Ultra | DU888_BV | 11643 |

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,TIDiaLamp
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup


# Group: Andor_paras
# Preset: Andor_paras_ini
ConfigGroup,Andor_paras,Andor_paras_ini,Andor,Gain,2
ConfigGroup,Andor_paras,Andor_paras_ini,Andor,Pre-Amp-Gain,Gain 2
ConfigGroup,Andor_paras,Andor_paras_ini,Andor,ReadoutMode,30.000 MHz


# Group: TiDiaLamp
# Preset: TiDiaLamp_ini
ConfigGroup,TiDiaLamp,TiDiaLamp_ini,TIDiaLamp,ComputerControl,On
ConfigGroup,TiDiaLamp,TiDiaLamp_ini,TIDiaLamp,Intensity,15
ConfigGroup,TiDiaLamp,TiDiaLamp_ini,TIDiaLamp,State,1



# PixelSize settings

